PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = posner-auto-counter
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent cue
      image [set every repeat] = $cue_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    ImageComponent target
      image = target.png
      pos [set every repeat] = (target_x, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.7
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  Routine auto_counter
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import pandas as pd

        try:
            # read the csv
            group_info = pd.read_csv('counterbalance_tracker.csv')

            # randomly sample a column
            group = group_info.sample(n=1, axis='columns')

            # use the column header as the group label
            thisgroup = group.columns[0]

            # remove an available slot from this group
            group_info[group.columns[0]][0] -= 1

            # if there are no more slots available for this group, drop it
            if group_info[group.columns[0]][0] == 0:
                group_info = group_info.drop(columns = [thisgroup])

            # resave the data file
            group_info.to_csv('counterbalance_tracker.csv', index = False)

        except:
            thisgroup = 'NO GROUP AVAILABLE'
      Begin Routine:
        # this saves the group assigned to the participant in the final data file
        thisExp.addData("group", thisgroup)
Flow
  Routine auto_counter
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $'group' + thisgroup + '_blocks.xlsx'
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blockfile': 'block-design-spreadsheets/valid_conditions.xlsx'},
      {'blockfile': 'block-design-spreadsheets/invalid_conditions.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $blockfile
      loopType = random
      nReps = 2
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      conditions:
        [{'cue_file': 'cue_left.png', 'target_x': -0.5, 'is_valid': 'valid'},
        {'cue_file': 'cue_left.png', 'target_x': -0.5, 'is_valid': 'valid'},
        {'cue_file': 'cue_left.png', 'target_x': -0.5, 'is_valid': 'valid'},
        {'cue_file': 'cue_left.png', 'target_x': -0.5, 'is_valid': 'valid'},
        {'cue_file': 'cue_right.png', 'target_x': 0.5, 'is_valid': 'valid'},
        {'cue_file': 'cue_right.png', 'target_x': 0.5, 'is_valid': 'valid'},
        {'cue_file': 'cue_right.png', 'target_x': 0.5, 'is_valid': 'valid'},
        {'cue_file': 'cue_right.png', 'target_x': 0.5, 'is_valid': 'valid'},
        {'cue_file': 'cue_left.png', 'target_x': 0.5, 'is_valid': 'invalid'},
        {'cue_file': 'cue_right.png', 'target_x': -0.5, 'is_valid': 'invalid'}]
      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
